PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = 1.0000, 1.0000, 1.0000
  expName = state_naming_task
  frameRateMsg = Experiment loading, please wait...
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Country_Naming_Task
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    TextComponent stimuli_prompt_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
      text = What is the name of this South American country?
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    TextboxComponent country_response
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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    ImageComponent okay_country_pics
      image [set every repeat] = $image_file
      size = (0.5, 0.65)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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  Routine instructions_states_task
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    TextComponent task_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a blank map of each U.S. state which will be displayed for 7 seconds. Your goal is to identify each state by providing a typed response within that 7 seconds. After identifying each U.S. state you will be presented with a blank map of various countries to label.

        This task should take approximately 10 minutes to complete.


        Please press "space" to begin this task.
    KeyboardComponent instruction_resp
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine States_Naming_Task_2
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    TextComponent stimuli_prompt_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
      text = What is the name of this U.S. state?
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    ImageComponent wider_state_pics
      image [set every repeat] = $image_file
      size = (0.95, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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    TextboxComponent us_state_response_2
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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  Routine States_Naming_Task
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    TextComponent stimuli_prompt
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
      text = What is the name of this U.S. State?
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    ImageComponent okay_state_pics
      draggable = True
      image [set every repeat] = $image_file
      ori [set every repeat] = 0
      size = (.6, .5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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    TextboxComponent us_state_response
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -.4)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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  Routine States_Naming_Task_3
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    TextComponent stimuli_prompt_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
      text = What is the name of this U.S. state?
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    ImageComponent taller_state_pics
      image [set every repeat] = $image_file
      size = (0.5, 0.65)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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    TextboxComponent us_state_response_3
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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  Routine instructions_countries_task
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    TextComponent task_instructions_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will be identifying different countries. As with the previous task, you will have 7 seconds to type a response, and after 7 seconds have passed you will move onto the next country.

        Press "space" to begin.
    KeyboardComponent instructions_resp_2
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Finish_Screen
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = You have now completed these two other tasks. Once this screen returns to the desktop, please notify the researcher that you have completed this part of the study.
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  Routine Country_Naming_Task_2
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
      text = What is the name of this South American country?
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    ImageComponent tall_country_trials
      image = south_america/Chile-Country-Outline.jpg
      size = (.22, .6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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    TextboxComponent textbox
      anchor = bottom-center
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.6)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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Flow
  Routine instructions_states_task
  LoopInitiator okay_states_trials loopType="TrialHandler"
    conditionsFile = states/loop_okay_states_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_file': 'states/Arizona-Outline-Map.jpg', 'correct_answer': 'Arizona'},
      {'image_file': 'states/Arkansas-Outline-Map.jpg', 'correct_answer': 'Arkansas'},
      {'image_file': 'states/California-Outline-Map.jpg', 'correct_answer': 'California'},
      {'image_file': 'states/Colorado-Outline-Map.jpg', 'correct_answer': 'Colorado'},
      {'image_file': 'states/Connecticut-Outline-Map.jpg', 'correct_answer': 'Connecticut'},
      {'image_file': 'states/Delaware-Outline-Map.jpg', 'correct_answer': 'Delaware'},
      {'image_file': 'states/Florida-Outline-Map.jpg', 'correct_answer': 'Florida'},
      {'image_file': 'states/Hawaii-Outline-Map.jpg', 'correct_answer': 'Hawaii'},
      {'image_file': 'states/Idaho-Outline-Map.jpg', 'correct_answer': 'Idaho'},
      {'image_file': 'states/Indiana-Outline-Map.jpg', 'correct_answer': 'Indiana'},
      {'image_file': 'states/Iowa-Outline-Map.jpg', 'correct_answer': 'Iowa'},
      {'image_file': 'states/Kansas-Outline-Map.jpg', 'correct_answer': 'Kansas'},
      {'image_file': 'states/Louisiana-Outline-Map.jpg', 'correct_answer': 'Louisiana'},
      {'image_file': 'states/Maine-Outline-Map.jpg', 'correct_answer': 'Maine'},
      {'image_file': 'states/Massachusetts-Outline-Map.jpg', 'correct_answer': 'Massachusetts'},
      {'image_file': 'states/Michigan-Outline-Map.jpg', 'correct_answer': 'Michigan'},
      {'image_file': 'states/Minnesota-Outline-Map.jpg', 'correct_answer': 'Minnesota'},
      {'image_file': 'states/Missouri-Outline-Map.jpg', 'correct_answer': 'Missouri'},
      {'image_file': 'states/Montana-Outline-Map.jpg', 'correct_answer': 'Montana'}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
    Routine States_Naming_Task
  LoopTerminator okay_states_trials
  LoopInitiator wider_states_trials loopType="TrialHandler"
    conditionsFile = states/loop_wider_states_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_file': 'states/Alaska-Outline-Map.jpg', 'correct_answer': 'Alaska'},
      {'image_file': 'states/Kentucky-Outline-Map.jpg', 'correct_answer': 'Kentucky'},
      {'image_file': 'states/Nebraska-Outline-Map.jpg', 'correct_answer': 'Nebraska'},
      {'image_file': 'states/North-Carolina-Outline-Map.jpg', 'correct_answer': 'North Carolina'},
      {'image_file': 'states/Oklahoma-Outline-Map.jpg', 'correct_answer': 'Oklahoma'},
      {'image_file': 'states/South-Dakota-Outline-Map.jpg', 'correct_answer': 'South Dakota'},
      {'image_file': 'states/Virginia-Outline-Map.jpg', 'correct_answer': 'Virginia'},
      {'image_file': 'states/Maryland-Outline-Map.jpg', 'correct_answer': 'Maryland'},
      {'image_file': 'states/Tennessee-Outline-Map.jpg', 'correct_answer': 'Tennessee'}]
    Routine States_Naming_Task_2
  LoopTerminator wider_states_trials
  LoopInitiator taller_states_trials loopType="TrialHandler"
    conditionsFile = states/loop_taller_states_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_file': 'states/Alabama-Outline-Map.jpg', 'correct_answer': 'Alabama'},
      {'image_file': 'states/Georgia-Outline-Map.jpg', 'correct_answer': 'Georgia'},
      {'image_file': 'states/Illinois-Outline-Map.jpg', 'correct_answer': 'Illinois'},
      {'image_file': 'states/Nevada-Outline-Map.jpg', 'correct_answer': 'Nevada'},
      {'image_file': 'states/New-Hampshire-Outline-Map.jpg', 'correct_answer': 'New Hampshire'},
      {'image_file': 'states/Mississippi-Outline-Map.jpg', 'correct_answer': 'Mississippi'}]
    Routine States_Naming_Task_3
  LoopTerminator taller_states_trials
  Routine instructions_countries_task
  LoopInitiator okay_country_trials loopType="TrialHandler"
    conditionsFile = south_america/okay_south_america.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_file': 'south_america/Argentina-Country-Outline.jpg', 'correct_answer': 'Argentina'},
      {'image_file': 'south_america/Bolivia-Country-Outline.jpg', 'correct_answer': 'Bolivia'},
      {'image_file': 'south_america/Brazil-Country-Outline.jpg', 'correct_answer': 'Brazil'},
      {'image_file': 'south_america/Colombia-Country-Outline.jpg', 'correct_answer': 'Colombia'},
      {'image_file': 'south_america/Ecuador-Country-Outline.jpg', 'correct_answer': 'Ecuador'},
      {'image_file': 'south_america/Guyana-Country-Outline.jpg', 'correct_answer': 'Guyana'},
      {'image_file': 'south_america/Paraguay-Country-Outline.jpg', 'correct_answer': 'Paraguay'},
      {'image_file': 'south_america/Peru-Country-Outline.jpg', 'correct_answer': 'Peru'},
      {'image_file': 'south_america/Suriname-Country-Outline.jpg', 'correct_answer': 'Suriname'},
      {'image_file': 'south_america/Uruguay-Country-Outline.jpg', 'correct_answer': 'Uruguay'},
      {'image_file': 'south_america/Venezuela-Country-Outline.jpg', 'correct_answer': 'Venezuela'}]
    Routine Country_Naming_Task
  LoopTerminator okay_country_trials
  Routine Country_Naming_Task_2
  Routine Finish_Screen
