PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = 1.0000, 1.0000, 1.0000
  expName = state_naming_task
  frameRateMsg = Experiment loading, please wait...
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine State_Naming_Task
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    TextComponent stimuli_prompt
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.5
      text = What is the name of this U.S. State?
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    ImageComponent state_pics
      image = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.5
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    TextboxComponent textbox
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.5
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  Routine instructions
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    TextComponent task_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the following task you will be presented with the outline of a U.S. state and you will be tasked with identifying what that state is by typing in your response.

        Please press "space" to begin this task.
    KeyboardComponent instruction_resp
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loop_us_state_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_file': '#VALUE!', 'correct_answer': 'Alabama'},
      {'image_file': '#VALUE!', 'correct_answer': 'Alaska'},
      {'image_file': '#VALUE!', 'correct_answer': 'Wyoming'}]
    Routine State_Naming_Task
  LoopTerminator trials
